PsychoPy2experiment version="1.64.00"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    PatchComponent gaborL
      image = sin
      mask = Gauss
      pos = [-3, 0]
      duration = 1.0
      startTime = 0.5
      sf = 0.1+level
      size = [0.5, 0.5]
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    PatchComponent gaborR
      image = sin
      mask = Gauss
      pos = [3, 0]
      duration = 1.0
      startTime = 0.5
      sf = 0.9-level
      size = [0.5, 0.5]
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    PatchComponent fixation
      image = None
      duration = 1.5
      startTime = 0
      sf = None
      size = [0.5, 0.5]
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    KeyboardComponent key_resp_2
      storeCorrect = True
      forceEndTrial = True
      correctAns = left
      storeResponseTime = False
      startTime = 0.5
      allowedKeys = ["left","right"]
      duration = 2
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  Routine Instructions
    TextComponent Instr
      letterHeight = 0.1
      startTime = 0.0
      units = deg
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      text:
        Press left to indicate the variable with the highest spatial frequency.
        Press any key when ready
    KeyboardComponent key_resp
      forceEndTrial = True
      storeResponseTime = False
      startTime = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="StairHandler"
    min value = 0
    N reversals = 0
    loopType = staircase
    nReps = 5
    start value = 0.5
    N up = 1
    max value = 1
    N down = 1
    step type = log
    step sizes = [0.8,0.8,0.4,0.4,0.2]
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    Routine trial
  LoopTerminator trials
