PsychoPy2experiment version="1.65.02"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001', 'ori':''}
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    PatchComponent LGabor
      image = sin
      mask = gauss
      pos = [-3, 0]
      duration = 1
      startTime = 0.0
      ori = $expInfo['ori']
      units = deg
      sf [set every repeat] = $level
      size = [3, 3]
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    PatchComponent RGabor
      image = sin
      mask = gauss
      pos = [3, 0]
      duration = 1.0
      startTime = 0.0
      ori = $expInfo['ori']
      units = deg
      sf = None
      size = [3, 3]
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    PatchComponent fixation
      color = $[-1,-1,-1]
      image = none
      mask = circle
      duration = 1.0
      startTime = 0.0
      units = deg
      sf = None
      size = [0.1, 0.1]
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    KeyboardComponent key_resp
      storeCorrect = True
      forceEndTrial = True
      correctAns = left
      startTime = 0.0
      allowedKeys = ["left","right"]
      storeResponseTime = False
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  Routine adaptation
    PatchComponent LAdapt
      image = sin
      mask = gauss
      pos = [-3, 0]
      duration = 5.0
      phase [set every frame] = $random()
      startTime = 0.0
      units = deg
      sf = 0.8
      size = [3.0,3.0]
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    PatchComponent RAdapt
      image = sin
      mask = gauss
      pos = [3, 0]
      duration = 5.0
      phase [set every frame] = $random()
      startTime = 0.0
      units = deg
      sf = 1.0
      size = [3, 3]
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    PatchComponent Afixation
      color = $[-1,-1,-1]
      image = none
      mask = circle
      duration = 5.0
      startTime = 0.0
      units = deg
      sf = None
      size = [0.1, 0.1]
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  Routine Instr
    TextComponent text
      text = Press left or right to indicate the highest frequency patch
      letterHeight = 0.1
      startTime = 0.0
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    KeyboardComponent key_resp_2
      forceEndTrial = True
      startTime = 0.0
      storeResponseTime = True
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Flow
  Routine Instr
  Routine adaptation
  LoopInitiator stairs loopType="StairHandler"
    min value = 0
    N reversals = 0
    loopType = staircase
    nReps = 1
    start value = 0.5
    N up = 1
    max value = 1
    N down = 3
    step type = log
    step sizes = [0.8,0.8,0.4,0.4,0.2]
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    Routine trial
  LoopTerminator stairs
