PsychoPy2experiment version="1.65.02"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    DotsComponent dots
      startVal [time (s)] = 0.0
      fieldPos = [0.0, 0.0]
      speed = 0.1
      noiseDots = direction
      dotLife = 3
      fieldShape = circle
      coherence = 1.0
      nDots = 100
      stopVal [duration (s)] = 1.0
      fieldSize = 1.0
      signalDots = different
      dotSize = 2
      dir = 0.0
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Flow
  Routine trial
