PsychoPy2experiment version="1.64.00"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent stroop
      color [set every repeat] = $letterColor
      text [set every repeat] = $text
      letterHeight = 0.1
      startTime = 0.0
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    KeyboardComponent key_resp
      storeCorrect = True
      forceEndTrial = True
      correctAns = $corrAns
      storeResponseTime = True
      startTime = 0.0
      allowedKeys = ["left","down","right"]
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  Routine FeedBack
    CodeComponent feedBack
      Begin Experiment:
        msg="x"
      Begin Routine:
        if key_resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(key_resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent feedBackText
      text [set every repeat] = $msg
      duration = 0.5
      letterHeight = 0.1
      startTime = 0.0
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  Routine Instructions
    TextComponent Instruct
      letterHeight = 0.1
      startTime = 0.0
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      text:
        Press the key that corresponds to the colour of the text
        red = left
        green = down
        blue = right
        Press any key to continue
    KeyboardComponent key_resp_2
      forceEndTrial = True
      storeResponseTime = False
      startTime = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1
    trialList = [{u'text': u'red', u'congruent': u'cong', u'corrAns': u'left', u'letterColor': u'red'}, {u'text': u'red', u'congruent': u'cong', u'corrAns': u'left', u'letterColor': u'red'}, {u'text': u'red', u'congruent': u'incong', u'corrAns': u'down', u'letterColor': u'green'}, {u'text': u'red', u'congruent': u'incong', u'corrAns': u'right', u'letterColor': u'blue'}, {u'text': u'green', u'congruent': u'incong', u'corrAns': u'left', u'letterColor': u'red'}, {u'text': u'green', u'congruent': u'cong', u'corrAns': u'down', u'letterColor': u'green'}, {u'text': u'green', u'congruent': u'cong', u'corrAns': u'down', u'letterColor': u'green'}, {u'text': u'green', u'congruent': u'incong', u'corrAns': u'right', u'letterColor': u'blue'}, {u'text': u'blue', u'congruent': u'incong', u'corrAns': u'left', u'letterColor': u'red'}, {u'text': u'blue', u'congruent': u'incong', u'corrAns': u'down', u'letterColor': u'green'}, {u'text': u'blue', u'congruent': u'cong', u'corrAns': u'right', u'letterColor': u'blue'}, {u'text': u'blue', u'congruent': u'cong', u'corrAns': u'right', u'letterColor': u'blue'}]
    trialListFile = trialTypes.xlsx
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    Routine trial
    Routine FeedBack
  LoopTerminator trials
