PsychoPy2experiment version="1.64.00"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    PatchComponent Gabor
      image = sin
      mask = gauss
      duration = 1.0
      startTime = 0.0
      sf = $level
      size = [0.5, 0.5]
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    KeyboardComponent key_resp_2
      storeCorrect = True
      forceEndTrial = True
      correctAns = left
      storeResponseTime = False
      startTime = 0.0
      allowedKeys = ["left","right"]
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  Routine Intro
    TextComponent Instructions
      duration = 1.0
      letterHeight = 0.1
      startTime = 0.0
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      text:
        Some Instructions, press some buttons

        Press any key to continue
    KeyboardComponent key_resp
      forceEndTrial = True
      storeResponseTime = True
      startTime = 0.0
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Flow
  Routine Intro
  LoopInitiator trials loopType="StairHandler"
    min value = 0
    N reversals = 0
    loopType = staircase
    nReps = 50
    start value = 0.5
    N up = 1
    max value = 1
    N down = 3
    step type = log
    step sizes = [0.8,0.8,0.4,0.4,0.2]
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    Routine trial
  LoopTerminator trials
